/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28084-new.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-30142-new.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-30593-new.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-foot-pedal-64307-new.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM1",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
        ,
        {
            "master": "MTMR",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
